PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pattern_mismatch
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Routines
  Routine title
    TextboxComponent textbox
      bold = False
      color = black
      durationEstim = 5
      editable = True
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        TEST

        Pattern mismatch experiment

        Higher/Louder
  Routine sound_event
    SoundComponent sound_1
      durationEstim = 0.1
      sound = A
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent test_A
      color = black
      durationEstim = 0.5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        100ms A

        400ms N/A
Flow
  Routine title
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 250
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    Routine sound_event
  LoopTerminator trials
